;zggpse
;avance-version (12/01/11)
;1D spin echo with gradients
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

#include <Avance.incl>
#include <De.incl>
#include <Grad.incl>

define list<gradient> gScale = {0 5 10 15 20 25 30 35 40 45 50 55 60 65 70 75 80 85 90 95}

"p2=p1*2"
"d16=100u"
"p13=500u"
"p14=500u"

1 ze
2 30m 
3 d1 pl1:f1
  (p13:sp13 ph1):f1
  50u UNBLKGRAD
  p16:gp1
  d16
	p16:gp2*gScale
  d16
  (p14:sp14 ph2):f1
  30u
  p16:gp1
  d16
	p16:gp2*-1*gScale
	d16
  20u BLKGRAD
  go=2 ph31
  30m wr #0 if #0 ze
  igrad gScale
  lo to 3 times td1
exit


ph1=0 0 1 1 2 2 3 3
ph2=1 3
ph31=0 0 3 3 2 2 1 1


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d16: delay for homospoil/gradient recovery
;ns: 2 * n, total number of scans: NS * TD0


;use gradient ratio:	gp 1 : gp 2
;			   1 :    1

;for z-only gradients:
;gpz1: 1%
;gpz2: 1%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id: zggpse,v 1.12 2012/01/31 17:49:32 ber Exp $
